PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'experimenter': '', 'left key': 'z', 'right key': 'm'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = charts
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 1
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Routines
  Routine setup
    CodeComponent imports
      Code Type = Py
      Begin Experiment:
        import random
        import csv
    CodeComponent set_paths
      Code Type = Py
      Begin Experiment:
        exp_files_dir = "experiment_files"
        conditions = {
            "training": os.path.join(exp_files_dir, "training.csv"),
            "testing": os.path.join(exp_files_dir, "testing.csv")
            }
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    CodeComponent init_variables
      Code Type = Py
      Begin Experiment:
        left_key = expInfo["left key"]
        right_key = expInfo["right key"]
        criterion = 16
        consecutive_correct = 0
    CodeComponent randomize_conditions
      Code Type = Py
      Begin Experiment:
        purosis = left_key
        turitis = right_key

        header = ["binary_representation", "muscles", "insulin", "glands", "sinus", "category", "phase"]
        muscles_list = ["tense", "relaxed"]
        insulin_list = ["high", "low"]
        glands_list = ["swollen", "recessed"]
        sinus_list = ["stuffy", "runny"]
        categories = [left_key, right_key]

        binary_conditions = [bin(i)[2:].zfill(4) for i in range(16)]
        training_stimuli_a = ["1111", "1100", "0111", "1000"]
        training_stimuli_b = ["0010", "0001", "1010", "0101"]
        training_stimuli = training_stimuli_a + training_stimuli_b
        testing_stimuli = [x for x in binary_conditions if x not in training_stimuli]

        random.shuffle(categories)
        random.shuffle(muscles_list)
        random.shuffle(insulin_list)
        random.shuffle(glands_list)
        random.shuffle(sinus_list)

        with open("./experiment_files/training.csv", mode="w" ,newline="") as f:
            writer = csv.writer(f, delimiter=",", quotechar='"', quoting=csv.QUOTE_NONNUMERIC)
            writer.writerow(header)
            for bin_con in training_stimuli_a :
                condition = [bin_con,
                            muscles_list[int(bin_con[0])],
                            insulin_list[int(bin_con[1])],
                            glands_list[int(bin_con[2])],
                            sinus_list[int(bin_con[3])],
                            categories[0],
                            "training"]
                writer.writerow(condition)
            for bin_con in training_stimuli_b:
                condition = [bin_con,
                            muscles_list[int(bin_con[0])],
                            insulin_list[int(bin_con[1])],
                            glands_list[int(bin_con[2])],
                            sinus_list[int(bin_con[3])],
                            categories[1],
                            "training"]
                writer.writerow(condition)
  Routine feedback
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    CodeComponent generate_feedback
      Code Type = Auto->JS
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      Begin Routine:
        correct = False
        feedback = "Incorrect"
        if(subject_response.keys[0] == category):
            correct = True
            feedback = "Correct"
    TextComponent feedback_chart
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $chart_text
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    TextComponent feedback_text
      color [set every repeat] = $"green" if correct else "red" 
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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    TextComponent feedback_purosis
      letterHeight = 0.05
      opacity [set every repeat] = 1 if subject_response.keys[0] == purosis else 0
      pos = (-0.35, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = Purosis
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    TextComponent feedback_turitis
      letterHeight = 0.05
      opacity [set every repeat] = 1 if subject_response.keys[0] == turitis else 0
      pos = (.35, -.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = Turitis
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    CodeComponent update_consecutive_correct
      Code Type = Py
      End Routine:
        if(correct):
            consecutive_correct += 1
        else:
            consecutive_correct = 0

        if(consecutive_correct == criterion):
            training_trials.finished = True
            training_blocks.finished = True
  Routine rate_confidence
    TextComponent confidence_rating_instructions
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = On a scale of 1-7, how confident are you in your diagnosis? (1 being the least confident, and 7 being the most confident)
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
    SliderComponent confidence_rating
      forceEndRoutine = True
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine reset
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    CodeComponent reset_consecutive_correct
      Code Type = Py
      Begin Routine:
        consecutive_correct = 0
  Routine show_stim
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    CodeComponent format_patient_chart
      Code Type = Py
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      Begin Routine:
        header = ["Muscles", "Insulin", "Glands", "Sinus"]
        symptoms = [muscles, insulin, glands, sinus]

        chart = [f"{x}: {y}" for x, y in zip(header, symptoms)]
        chart_text = "\n".join(chart)
    TextComponent patient_chart
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $chart_text
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    TextComponent purosis_text
      letterHeight = 0.05
      pos = (-0.35, -0.35)
      startVal [time (s)] = 0.0
      text = Purosis
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    TextComponent turitis_text
      letterHeight = 0.05
      pos = (.35, -.35)
      startVal [time (s)] = 0.0
      text = Turitis
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    TextComponent answer
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $(f"{str(binary_representation)} {category} {consecutive_correct}")
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    KeyboardComponent subject_response
      allowedKeys = left_key, right_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  LoopInitiator training_blocks loopType="TrialHandler"
    loopType = random
    nReps = 15
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    conditions:
      [OrderedDict([('binary_representation', 1111), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1111), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1100), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1100), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 111), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 111), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1000), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm'), ('phase', 'training')]),
      OrderedDict([('binary_representation', 1000), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm'), ('phase', 'training')])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
    LoopInitiator training_trials loopType="TrialHandler"
      conditionsFile = experiment_files/training.csv
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('binary_representation', 1111), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm'), ('phase', 'training')]),
        OrderedDict([('binary_representation', 1100), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm'), ('phase', 'training')]),
        OrderedDict([('binary_representation', 111), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'm'), ('phase', 'training')]),
        OrderedDict([('binary_representation', 1000), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'm'), ('phase', 'training')]),
        OrderedDict([('binary_representation', 0), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'z'), ('phase', 'training')]),
        OrderedDict([('binary_representation', 1), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'runny'), ('category', 'z'), ('phase', 'training')]),
        OrderedDict([('binary_representation', 1010), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'stuffy'), ('category', 'z'), ('phase', 'training')]),
        OrderedDict([('binary_representation', 101), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny'), ('category', 'z'), ('phase', 'training')])]
      Routine show_stim
      Routine feedback
    LoopTerminator training_trials
  LoopTerminator training_blocks
  LoopInitiator testing_blocks loopType="TrialHandler"
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('binary_representation', 10), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 11), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 100), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'stuffy'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 110), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 1001), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 1011), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 1101), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'runny'), ('category', 'T'), ('phase', 'testing')]),
      OrderedDict([('binary_representation', 1110), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('category', 'T'), ('phase', 'testing')])]
    LoopInitiator testing_trials loopType="TrialHandler"
      conditionsFile = experiment_files/testing.csv
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('binary_representation', 10), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('phase', 'testing')]),
        OrderedDict([('binary_representation', 11), ('muscles', 'tense'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny'), ('phase', 'testing')]),
        OrderedDict([('binary_representation', 100), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'stuffy'), ('phase', 'testing')]),
        OrderedDict([('binary_representation', 110), ('muscles', 'tense'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('phase', 'testing')]),
        OrderedDict([('binary_representation', 1001), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'swollen'), ('sinus', 'runny'), ('phase', 'testing')]),
        OrderedDict([('binary_representation', 1011), ('muscles', 'relaxed'), ('insulin', 'high'), ('glands', 'recessed'), ('sinus', 'runny'), ('phase', 'testing')]),
        OrderedDict([('binary_representation', 1101), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'swollen'), ('sinus', 'runny'), ('phase', 'testing')]),
        OrderedDict([('binary_representation', 1110), ('muscles', 'relaxed'), ('insulin', 'low'), ('glands', 'recessed'), ('sinus', 'stuffy'), ('phase', 'testing')])]
      Routine show_stim
      Routine rate_confidence
    LoopTerminator testing_trials
  LoopTerminator testing_blocks
