PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'psychopyOutput/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': '', 'experimenter': '', 'language': 'english'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 2023.1.3
  Window size (pixels) = [1920, 1200]
  color = white
  expName = Fish15
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine runTrial
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        myFaceFileName="temp"
        myLeftFishFileName="temp"
        myRightFishFileName="temp"
        showLeftFish="temp"
        showRightFish="temp"
        myFeedbackImpage="temp"
      Begin Routine:
        myFaceFileName= "assets/"+face+".png"
        myLeftFishFileName="assets/"+leftFish+".png"
        myRightFishFileName="assets/"+rightFish+".png"
    ImageComponent trial_face
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.1
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    TextComponent trial_text
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every frame] = $texts["trial_text"]
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    ImageComponent fishOnLeft
      image [set every repeat] = $myLeftFishFileName
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = .25
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    ImageComponent fishOnRight
      image [set every repeat] = $myRightFishFileName
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.25
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    KeyboardComponent trial_response
      allowedKeys = 'z','m','left','right'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        nFBleft=0
        nFBright=0

        if(trial_response.keys == "z"):
            trial_response.keys = "left"
        if(trial_response.keys == "m"):
            trial_response.keys = "right"


        if (trial_response.keys=='left') :
            myChosen="left"
            myCircleHoriz = -0.13
        else :
            myChosen="right"
            myCircleHoriz = 0.22
        if (trial_response.keys==correctResponse) :
            myTrialCorrect=True
            thisExp.addData('Correct',1)
            myTally = myTally + 1
            myFeedbackImage="assets/win.png"
            myConsecutiveCorrect = myConsecutiveCorrect+1
            if (myConsecutiveCorrect >= myCriterion) :
                CriterionReached=True
        else :
            myTrialCorrect=False
            thisExp.addData('Correct',0)
            myFeedbackImage="assets/lose.png"
            myConsecutiveCorrect = 0
        if (correctResponse=="left") :
            showLeftFish=myLeftFishFileName
            showRightFish="assets/blank.png"
        else :
            showLeftFish="assets/blank.png"
            showRightFish=myRightFishFileName
    CodeComponent log_trial
      Code Type = Auto->JS
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      End Routine:
        correct = ""
        if(trial_response.keys == correctResponse):
            # We do a string so we can concatenate an asterisk to it for critical pairs
            correct = "1" # 1 if correct, 0 otherwise
        else:
            correct = "0"

        # Add a star if this stimulus contains a critical pair
        stim_vars = [face, leftFish, rightFish, correctResponse]
        stim = ",".join(stim_vars)
        if (stim in crit_pairs_stims):
            correct += "*"

        # Keeping track of overall scores
        # phases < 3 are acquisition, phase 3 is testing retention and generalization
        if(current_phase < 3 and correct == "1"):
            acquisition_score += 1
        elif(correct == "1"): # We are in phase 3, correct answer, but no critical pair
            retention_score += 1
        elif(correct == "1*"): # We are in phase 3, correct answer, but no critical pair
            generalization_score += 1

        # Update the number of trials
        # phases < 3 are acquisition, phase 3 is testing retention and generalization
        if(current_phase < 3):
            acquisition_trials += 1
        # If not a critical pair (no asterisk), it is retention
        elif("*" not in correct):
            retention_trials += 1
        # if it is a critical pair then it is generalization
        else:
            generalization_trials += 1


        # Convert all the variables we want to log into strings and store them in a list
        # so we can join them later
        log_vars = [ str(x) for x in [current_trial, face, leftFish, rightFish,
                    correctResponse, trial_response.keys, trial_response.rt, correct]]

        log_text = ",".join(log_vars) + "\n"
        data_file.write(log_text)

        current_trial += 1
  Routine startup
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    CodeComponent imports
      Code Type = Py
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      Before Experiment:
        import random
        import csv
    CodeComponent face_fish_pairing
      Code Type = Py
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      Before Experiment:
        # File names of faces and fishes without extension
        fishes = ["green", "blue", "purple", "red"]
        faces = ["boy", "girl", "man", "woman"]

        # Generating the random pairings
        # Distinct random numbers in [0, 3]
        r1, r2, r3, r4 = random.sample(population=range(4), k=4)

        exp_files_path = os.path.join(os.getcwd(), "experimentFiles")
        pairs_filename = "face_fish_pairings.csv"
        pairings_filepath = os.path.join(exp_files_path, pairs_filename)
        file = open(pairings_filepath, "w")
        file.write("face,fish1,fish2\n")
        file.write(f"{faces[r1]},{fishes[r1]},{fishes[r2]}\n")
        file.write(f"{faces[r2]},{fishes[r1]},{fishes[r2]}\n")
        file.write(f"{faces[r3]},{fishes[r3]},{fishes[r4]}\n")
        file.write(f"{faces[r4]},{fishes[r3]},{fishes[r4]}\n")
        file.close()
    CodeComponent phase_gen
      Code Type = Py
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      Before Experiment:
        def generate_phase_file(pairings, phase_faces, phase_fishes, filename):
            '''
            Generates a csv file with every valid combination of face
            left_fish and right_fish.
            Args:
                pairings: a dictionary containing all the face-fish pairings in the
                          format pairings[face] = {fish1, fish2}
                phase_faces: a list of strings with the base file name of the faces that
                             correspond to the desired phase
                phase_fishes: a list of strings with the base file name of the fishes
                              that correspond to the desired phase
            Returns:
                None. It instead generates [filename].csv for the that lists the
                stimuli for the desired phase
            '''
            file = open(filename, "w", newline="")
            header = ["face","leftFish","rightFish","correctResponse"]
            writer = csv.writer(file, delimiter=",", quotechar="\"",
                                    quoting=csv.QUOTE_NONNUMERIC)
            writer.writerow(header)
            # filename format should be phaseX.csv where X is the phase number
            # phase_no = filename.split(".")[0][-1]

            for face in phase_faces:
                # Create a list of the fishes that the face above owns and does not own
                not_owned_fishes = []
                owned_fishes = []
                for fish in phase_fishes:
                    if(fish in pairings[face]):
                        owned_fishes.append(fish)
                    else:
                        not_owned_fishes.append(fish)

                if(len(owned_fishes) > 1):
                    # All the other phases. Do it this way because range would be empty
                    # if there's only 1 owned fish
                    for i in range(len(owned_fishes)):
                        correct = owned_fishes[i]
                        incorrect = not_owned_fishes[i]
                        row1 = [face, correct, incorrect, "left"]
                        row2 = [face, incorrect, correct, "right"]
                        writer.writerow(row1)
                        writer.writerow(row2)
                else: # Phase 0
                    correct = owned_fishes[0]
                    incorrect = not_owned_fishes[0]
                    row1 = [face, correct, incorrect, "left"]
                    row2 = [face, incorrect, correct, "right"]
                    writer.writerow(row1)
                    writer.writerow(row2)

            file.close()

        def remove_crit_pairs(faces, fishes, filename, pairings):
            '''
            Removes and returns the critical pairs from the phase file with
            name `filename`. This should only be used for a phase which is not the test
            phase and was generated with all the faces and fishes, i.e. phase 2.
            Args:
                faces: a list of all the faces
                fishes: a list of all the fishes
                filaneme: the file name of the phase file to modify
                pairings: a dictionary containing all the face-fish pairings in the
                          format pairings[face] = {fish1, fish2}
            Returns:
                a set of all stimuli containing critical pairs
                in comma separated string format
            '''

            # Phase 3 critical pairs:
            # Face B: Fish a/b, Face D: fish c/d
            do_not_include = {faces[1]: pairings[faces[1]][1], faces[3]: pairings[faces[3]][1]}

            file = open(filename, "r")
            reader = csv.DictReader(file)
            rows = []
            crit_pairs_stims = set()
            for row in reader:
                face = row["face"]
                fish1 = row["leftFish"]
                fish2 = row["rightFish"]
                correct = row["correctResponse"]
                # If the face is not one of the critical pairs of phase 3 then
                # it should be included in phase 2
                should_include = not ((face in do_not_include) and
                    (fish1 == do_not_include[face] or fish2 == do_not_include[face]))

                if (should_include): # not a critical pair
                    rows.append([face, fish1, fish2, correct])
                else: # critical pair
                    stim =  ",".join([face, fish1, fish2, correct])
                    crit_pairs_stims.add(stim)

            file.close()
            file = open(filename, "w", newline="")
            header = ["face","leftFish","rightFish","correctResponse"]
            writer = csv.writer(file, delimiter=",", quotechar="\"",
                                    quoting=csv.QUOTE_NONNUMERIC)
            writer.writerow(header)
            for row in rows:
                writer.writerow(row)
            file.close()

            return crit_pairs_stims

        # Getting the pairings from previously generated pairings file
        exp_files_path = os.path.join(os.getcwd(), "experimentFiles")
        pairings = {}
        #pairings_file = open(exp_files_path + "face_fish_pairings.csv", "r")
        pairings_file = open(pairings_filepath, "r")
        reader = csv.DictReader(pairings_file)
        for row in reader:
            pairings[row["face"]] = [row["fish1"], row["fish2"]]
        pairings_file.close()

        # All faces
        faces = list(pairings)
        # All fishes
        fishes = []
        for face in faces:
            if len(fishes) == 4: #There are only 4 fishes
                break
            for fish in pairings[face]:
                if(fish not in fishes):
                    fishes.append(fish)


        # Face A and Face C
        phase0_faces = [faces[0], faces[2]]
        phase0_fishes = [pairings[faces[0]][0], pairings[faces[2]][0]]
        phase0_file = os.path.join(exp_files_path, "phase0.csv")
        generate_phase_file(pairings, phase0_faces, phase0_fishes, phase0_file)

        phase1_faces = faces
        phase1_fishes = phase0_fishes
        phase1_file = os.path.join(exp_files_path, "phase1.csv")
        generate_phase_file(pairings, phase1_faces, phase1_fishes, phase1_file)

        phase2_faces = faces
        phase2_fishes = fishes
        phase2_file = os.path.join(exp_files_path, "phase2.csv")
        generate_phase_file(pairings, phase2_faces, phase2_fishes, phase2_file)
        # critical pairs are not supposed to be in phase 2
        crit_pairs_stims = remove_crit_pairs(phase2_faces, phase2_fishes, phase2_file, pairings)

        phase3_faces = faces
        phase3_fishes = fishes
        phase3_file = os.path.join(exp_files_path, "phase3.csv")
        generate_phase_file(pairings, phase3_faces, phase3_fishes, phase3_file)
    CodeComponent language
      Code Type = Py
      Begin Experiment:
        fb_text = {
            True: {"english":"Correct!", "spanish":"¡Correcto!"},
            False: {"english":"Incorrect!", "spanish":"¡Incorrecto!"},
        }

        supported_languages = ["english", "español"]

        language = expInfo["language"].lower()
        if(language == "spanish" or language == "español"):
            language = "spanish"
        elif(language == "english"):
            language = "english"
        else:
            print("Language not supported. The supported languages are:", file=sys.stderr)
            for lang in supported_languages:
                print(lang, file=sys.stderr)

        texts = {}

        with open(os.path.join(exp_files_path, "texts.csv"), mode="r", newline="", encoding="utf-8") as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                texts[row["text_object"]] = row[language].replace("\\n","\n")
    CodeComponent license_and_terms
      Code Type = Py
      Before Experiment:
        '''
        Fish v. 15 software, running on PsychoPy (v.2023.1.2)

        This software is adapted from software which was written by Catherine E. Myers
        under funding from the Department of Veterans Affairs,
        Office of Research and Development.

        Design is adapted from the task originally described in
        Myers et al. (2003) Journal of Cognitive Neuroscience, 15(2),
        185-193.

        Fish v.15 is a neuroscience experiment to asses the generalization performance of individuals
        Copyright (C) 2023  Jose Mojica Perez

        This program is free software: you can redistribute it and/or modify
        it under the terms of the GNU Affero General Public License as
        published by the Free Software Foundation, either version 3 of the
        License, or (at your option) any later version.

        This program is distributed in the hope that it will be useful,
        but WITHOUT ANY WARRANTY; without even the implied warranty of
        MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
        GNU Affero General Public License for more details.

        You should have received a copy of the GNU Affero General Public License
        along with this program.  If not, see <https://www.gnu.org/licenses/>.

        Author's contact information:
            email: jmojicaperez@acm.org
        '''
      Before JS Experiment:
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        Design is adapted from the task originally described in
        Myers et al. (2003) Journal of Cognitive Neuroscience, 15(2),
        185-193.

        Fish v.15 is a neuroscience experiment to asses the generalization performance of individuals
        Copyright (C) 2023  Jose Mojica Perez

        This program is free software: you can redistribute it and/or modify
        it under the terms of the GNU Affero General Public License as
        published by the Free Software Foundation, either version 3 of the
        License, or (at your option) any later version.

        This program is distributed in the hope that it will be useful,
        but WITHOUT ANY WARRANTY; without even the implied warranty of
        MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
        GNU Affero General Public License for more details.

        You should have received a copy of the GNU Affero General Public License
        along with this program.  If not, see <https://www.gnu.org/licenses/>.

        Author's contact information:
        email: jmojicaperez@acm.org*/
    CodeComponent start_data_log
      Code Type = Py
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      Begin Routine:
        import datetime

        participant = expInfo["participant"]
        experimenter = expInfo["experimenter"]

        data_path = os.path.join(os.getcwd(), "data")

        # Create data directory if it doesn't exist
        if(not os.path.exists(data_path)):
            os.mkdir(data_path)

        data_filename = expName + "_" + participant + ".csv"
        data_file = open(os.path.join(data_path, data_filename), "w")

        expDateTime = datetime.datetime.now()
        # Weekday(full name), Month(full name) Day(dd), Year(yyyy)
        date = expDateTime.strftime("%A, %B %d, %Y")
        # Hour(00-12):Minute(00-59):Second(00-59) AM/PM
        time = expDateTime.strftime("%I:%M:%S %p")

        # Getting the critical pairs
        crit_pairs = []
        for stim in crit_pairs_stims:
            face, fish1, fish2, correct = stim.split(",")
            pair1 = (face, fish1, fish2)
            pair2 = (face, fish2, fish1)
            if(pair1 not in crit_pairs and pair2 not in crit_pairs):
                crit_pairs.append(pair1)

        # Keep track of phase number
        current_phase = 0

        data_file.write(f"{expName}\n")
        data_file.write(f"Subject ID: {participant}\n")
        data_file.write(f"Experimenter: {experimenter}\n")
        data_file.write(f"\"{date}\"\n")
        data_file.write(f"Time: {time}\n")
        data_file.write(f"\"Note: Critical Pairs = {crit_pairs}\"\n")
    TextComponent License_And_Terms
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["License_And_Terms"]
      wrapWidth = 1.5
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    KeyboardComponent conditions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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  Routine test_instr
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    TextComponent test_text
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["test_text"]
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    KeyboardComponent test_instr_key
      allowedKeys = 'z','m','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      store = nothing
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    CodeComponent start_phase_log_test
      Code Type = Py
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      Begin Routine:
        # Update phase number
        current_phase += 1

        # Initialize trials for the curent phase
        current_trial = 1


        data_file.write(f"----- PHASE {current_phase} -----\n")
        header = "Trial,Face,Left Fish,Right Fish,Correct Response,Subject Response,Response Time,Correct/Incorrect\n"
        data_file.write(header)
  Routine train_instr
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    TextComponent train_instructions_text
      color = black
      letterHeight = 0.065
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["train_instructions_text"]
      wrapWidth = 1.5
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    KeyboardComponent train_instr_key
      allowedKeys = 'z','m','left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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    CodeComponent code_train_instr
      Code Type = Py
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      Begin Experiment:
        myISIduration=1.0
        myTally=0

        CriterionReached=False
        myConsecutiveCorrect=0
        myCriterion=4

        myCircleHoriz = -0.15
        myCircleVert = 0.01

        myTrialCorrect = False
        myErr1 = 0
        myCrit1 = 0
        myErr2 = 0
        myCrit2 = 0
        myErr3 = 0
        myCrit3 = 0
        myOldErr = 0
        myNewErr = 0
        myOldTrials = 0
        myNewTrials = 0
    CodeComponent start_phase_log_train
      Code Type = Py
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      Begin Routine:
        # Initialize phase number
        current_phase = 0

        # Initialize trials for the curent phase
        current_trial = 1

        # Initialize scores
        # Ratio of correct answers/trials for phases 0,1,2
        acquisition_score = 0
        acquisition_trials = 0
        # Ratio of correct answers/trials for non-critical
        # pairs in phase 3 (pairs that were shown in previous phases)
        retention_score = 0
        retention_trials = 0
        # Ratio of correct answers/trials for critical
        # pairs in phase 3 (pairs that were not shown in previous phases)
        generalization_score = 0
        generalization_trials = 0

        data_file.write(f"----- PHASE {current_phase} -----\n")
        header = "Trial,Face,Left Fish,Right Fish,Correct Response,Subject Response,Response Time,Correct/Incorrect\n"
        data_file.write(header)
  Routine goodbye
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    TextComponent goodbye_text1
      color = black
      letterHeight = 0.08
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["goodbye_text1"]
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    TextComponent tally
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every frame] = $str(myTally)
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    TextComponent goodbye_text2
      color = black
      letterHeight = 0.08
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = $texts["goodbye_text2"]
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    KeyboardComponent goodbye_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      store = nothing
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    CodeComponent end_data_log
      Code Type = Py
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      Begin Routine:
        # Close data file
        data_file.close()

        # Calculate ratios and convert to string
        generalization = generalization_score/generalization_trials
        retention = retention_score/retention_trials
        acquisition = acquisition_score/acquisition_trials

        # Write summary to file
        header = ["subject","experiment","experimenter",
                "date","time","acquisition",
                "acquisition_trials","retention",
                "retention_trials","generalization",
                "generalization_trials"]
        info = [participant, expName, experimenter,
                date, time, acquisition, acquisition_trials,
                retention, retention_trials, generalization,
                generalization_trials]

        summaries_path = os.path.join(data_path, "summaries")

        # Create summaries dir if it doesn't exist:
        if(not os.path.exists(summaries_path)):
            os.mkdir(summaries_path)

        summary_filename = data_filename.split(".")[0] + "_summary.csv"

        with open(os.path.join(summaries_path, summary_filename), "w", newline="") as csvfile:
            writer = csv.writer(csvfile, delimiter=",", quotechar="\"", quoting=csv.QUOTE_NONNUMERIC)
            writer.writerow(header)
            writer.writerow(info)
    CodeComponent code_6
      Code Type = Py
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      End Experiment:
        thisExp.addData('Err1',myErr1)
        thisExp.addData('Err2',myErr2)
        thisExp.addData('Err3',myErr3)
        thisExp.addData('Crit1',myCrit1)
        thisExp.addData('Crit2',myCrit2)
        thisExp.addData('Crit3',myCrit3)
        thisExp.addData('PctErrTestOld',100*myOldErr/myOldTrials)
        thisExp.addData('PctErrTestNew',100*myNewErr/myNewTrials)
  Routine doFB1
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    ImageComponent FB2_face
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_Circle
      durationEstim = 1
      image = assets/TheCircle.png
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB1_leftFish
      durationEstim = 1
      image [set every repeat] = $showLeftFish
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB1_rightFish
      durationEstim = 1
      image [set every repeat] = $showRightFish
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent FB1_code
      Code Type = Py
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      End Routine:
        if (myTrialCorrect==False) :
            myErr1 += 1
        if (CriterionReached==True) :
            trials1.finished=True
            myCrit1 = 1
    TextComponent FB1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text[myTrialCorrect][language]
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  Routine doFB2
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    ImageComponent FB2_face_2
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_Circle_2
      durationEstim = 1
      image = assets/TheCircle.png
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_leftFish
      durationEstim = 1
      image [set every repeat] = $showLeftFish
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB2_rightFish
      durationEstim = 1
      image [set every repeat] = $showRightFish
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent FB2_code
      Code Type = Py
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      End Routine:
        if (myTrialCorrect==False) :
            myErr2 += 1
        if (CriterionReached==True) :
            trials2.finished=True
            myCrit2 = 1
    TextComponent FB2_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text[myTrialCorrect][language]
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  Routine doFB3
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    ImageComponent FB3_face
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_Circle
      durationEstim = 1
      image = assets/TheCircle.png
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_leftFish
      durationEstim = 1
      image [set every repeat] = $showLeftFish
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent FB3_rightFish
      durationEstim = 1
      image [set every repeat] = $showRightFish
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent FB3_code
      Code Type = Py
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      End Routine:
        if (myTrialCorrect==False) :
            myErr3 += 1
        if (CriterionReached==True) :
            trials3.finished=True
            myCrit3 = 1
    TextComponent FB3_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text[myTrialCorrect][language]
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  Routine noFB
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    ImageComponent noFB_face
      durationEstim = 1
      image [set every repeat] = $myFaceFileName
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent noFB_Circle
      durationEstim = 1
      image = assets/TheCircle.png
      pos [set every repeat] = [myCircleHoriz, myCircleVert]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = myISIduration
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    ImageComponent noFB_leftFish
      durationEstim = 1
      image [set every repeat] = $myLeftFishFileName
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    ImageComponent noFB_rightFish
      durationEstim = 1
      image [set every repeat] = $myRightFishFileName
      pos = (+0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = myISIduration
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    CodeComponent code_5
      Code Type = Py
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      End Routine:
        if ("*" in correct) :
            myNewTrials+=1
        else :
            myOldTrials+=1
        if (myTrialCorrect==False) :
            if ("*" in correct) :
                myNewErr+=1
            else :
                myOldErr+=1
  Routine next_stage
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        CriterionReached=False
        myConsecutiveCorrect=0
        myCriterion = myCriterion+4
    CodeComponent start_phase_log
      Code Type = Py
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      Begin Routine:
        # Update phase number
        current_phase += 1

        # Initialize trials for the curent phase
        current_trial = 1

        data_file.write(f"----- PHASE {current_phase} -----\n")
        header = "Trial,Face,Left Fish,Right Fish,Correct Response,Subject Response,Response Time,Correct/Incorrect\n"
        data_file.write(header)
Flow
  Routine startup
  Routine train_instr
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = experimentFiles/phase0.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('face', 'girl'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'girl'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'right')])]
    Routine runTrial
    Routine doFB1
  LoopTerminator trials1
  Routine next_stage
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = experimentFiles/phase1.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('face', 'girl'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'girl'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'boy'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'boy'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'man'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'man'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'right')])]
    Routine runTrial
    Routine doFB2
  LoopTerminator trials2
  Routine next_stage
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = experimentFiles/phase2.csv
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('face', 'girl'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'girl'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'girl'), ('leftFish', 'green'), ('rightFish', 'purple'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'girl'), ('leftFish', 'purple'), ('rightFish', 'green'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'boy'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'boy'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'purple'), ('rightFish', 'green'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'green'), ('rightFish', 'purple'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'man'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'man'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'right')])]
    Routine runTrial
    Routine doFB3
  LoopTerminator trials3
  Routine test_instr
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = experimentFiles/phase3.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('face', 'girl'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'girl'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'girl'), ('leftFish', 'green'), ('rightFish', 'purple'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'girl'), ('leftFish', 'purple'), ('rightFish', 'green'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'boy'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'boy'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'boy'), ('leftFish', 'green'), ('rightFish', 'purple'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'boy'), ('leftFish', 'purple'), ('rightFish', 'green'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'purple'), ('rightFish', 'green'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'woman'), ('leftFish', 'green'), ('rightFish', 'purple'), ('correctResponse', 'right')]),
      OrderedDict([('face', 'man'), ('leftFish', 'red'), ('rightFish', 'blue'), ('correctResponse', 'left')]),
      OrderedDict([('face', 'man'), ('leftFish', 'blue'), ('rightFish', 'red'), ('correctResponse', 'right')])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
    Routine runTrial
    Routine noFB
  LoopTerminator test_trials
  Routine goodbye
